PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = ANT
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Te damos la bienvenida.

        En seguida te presentaremos un cuestionario y una tarea de tiempos de reacción. Este experimento tiene una duración aproximada máxima de 30 minutos.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarea ANT:
        Coloca tus dedos indices en las teclas F y J del teclado.
        Presiona la tecla correspondiente a la direccion de la flecha central.
        Ignora los distractores.

        Si la flecha central apunta a la derecha >:
        >>>>> Presiona J <<><<

        Si la flecha central apunta a la izquierda <:
        <<<<< Presiona F >><>>

        [Presiona barra espaciadora para continuar...]
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_intro
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
  Routine Fix
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    PolygonComponent cross_fix
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_duration
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    CodeComponent code_fix
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        fix_duration = .400
      Begin Routine:
        fix_duration = .400 + random.uniform(0.0, 1.2)
        outlet.push_sample([f"fix_duration:{fix_duration}"])
  Routine Target
    RoutineSettingsComponent Target
      stopVal [duration (s)] = 1.7
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    PolygonComponent cross_target
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    TextComponent text_target
      font = Noto Sans Mono
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      text [set every repeat] = >>>>>
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    CodeComponent code_target
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([f"target:{target}"])
        text_target.text = target
        if cue == "SC":
            p = np.sign(cue_pos1[1])
            outlet.push_sample(["up"])
        else:
            p = np.random.choice([-1,1])
            outlet.push_sample(["down"])
        text_target.pos = [0.0, p*0.25]
    KeyboardComponent key_resp_target
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    PolygonComponent Blank_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine End
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Este es el fin de la prueba.

        ¡Gracias por participar!
  Routine Intro_FFMQ
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    TextComponent text_intro_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora te presentaremos una encuesta relacionada a atencion.
        Ésta consta de 39 preguntas.

        Elije la alternativa que mejor refleje el grado en que estás de acuerdo con cada uno de los enunciados que se indican a continuación. Cuando estés listo/a presiona la barra espaciadora para continuar.
    KeyboardComponent key_resp__intro_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_ffmq
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    SliderComponent slider_ffmq
      forceEndRoutine = False
      granularity = 1
      labels = ["Nunca o muy raramente cierto", "Raramente cierto", "Algunas veces cierto", "A menudo cierto", "Muy a menudo o siempre cierto"] 
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{int(question_number)}: {question_text}"
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    KeyboardComponent key_resp_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = slider_ffmq.getRating() != None
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    TextComponent text_ffmq_next
      letterHeight = 0.02
      pos = (0.4, -0.45)
      startVal [condition] = slider_ffmq.getRating() != None
      text = [Presiona la barra espaciadora para continuar...]
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  Routine end_ffmq
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    TextComponent text_end_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hasta aquí llega el cuestionario. En seguida te pediremos que realices una tarea.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_end_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_end
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    TextComponent text_block_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Este es el final del bloque {blocks.thisN+1}.

        Puedes tomar una pausa.

        [Presiona barra espaciadora para continuar...]
        """
    KeyboardComponent key_resp_block_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cue
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    PolygonComponent cross_cue
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    TextComponent text_1_cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = *
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    TextComponent text_2_cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = *
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    CodeComponent code_cue
      Code Type = Py
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      Before Experiment:
        import numpy as np
        from pylsl import StreamInfo, StreamOutlet
        import tobii_research as tr
        import psychopy.logging as log

        # Setup LSL outlets
        info = StreamInfo("Psychopy", "Markers", 1, 0, "string", "PsychopyUUID0001")
        outlet = StreamOutlet(info)
        outlet.push_sample(["before_experiment"])

        log.info("Creating LSL stream for eyetracker")
        info_et = StreamInfo('Tobii Pro', 'Gaze', 4, 120, 'float32', 'Pupilometry1618')
        outlet_et = StreamOutlet(info_et)

        # Setup eyetracker
        EYETRACKER_ADDRESS = "tobii-prp://TPFC2-010203823651"
        log.info(f"Connecting to tobii device: {EYETRACKER_ADDRESS}")
        et = tr.EyeTracker(EYETRACKER_ADDRESS)
        log.info(f"Eyetracker: {et}")

        def gaze_data_callback(gaze_data):
            outlet_et.push_sample([gaze_data['left_gaze_point_on_display_area'],
                                gaze_data['right_gaze_point_on_display_area'],
                                gaze_data['left_pupil_diameter'],
                                gaze_data['right_pupil_diameter']])
      Begin Experiment:
        outlet.push_sample([f"begin_experiment"])
        et.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
      Begin Routine:
        outlet.push_sample([f"cue:{cue}"])
        if cue == "NC":
            cue_pos1 = [0.0,  1.5]
            cue_pos2 = [0.0, -1.5]
        elif cue == "CC":
        #    Position both cue texts at 0.0
            cue_pos1 = cue_pos2 = [0.0, 0.0]
        elif cue == "DC":
            cue_pos1 = [0.0,  .25]
            cue_pos2 = [0.0, -.25]
        elif cue == "SC":
            if np.random.rand() >= 0.5:
                cue_pos1 = cue_pos2 = [0.0,  .25]
                outlet.push_sample(["up"])
            else:
                cue_pos1 = cue_pos2 = [0.0, -.25]
                outlet.push_sample(["down"])
        text_1_cue.pos = cue_pos1
        text_2_cue.pos = cue_pos2
Flow
  Routine Welcome
  Routine Intro_FFMQ
  LoopInitiator trials_ffmq loopType="TrialHandler"
    conditionsFile = Lists/ffmq.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('question_number', '1,"Cuando camino noto deliberadamente las sensaciones de mi cuerpo al moverse.'), ('question_text', None)]),
      OrderedDict([('question_number', '2,"Se me da bien encontrar las palabras para describir mis sentimientos.'), ('question_text', None)]),
      OrderedDict([('question_number', '3,"Me critico a mi mismo/a por tener emociones irracionales o inapropiadas.'), ('question_text', None)]),
      OrderedDict([('question_number', '4,"Percibo mis sentimientos y emociones sin tener que reaccionar a ellos.'), ('question_text', None)]),
      OrderedDict([('question_number', '5,"Cuando hago algo mi mente divaga y me distraigo fácilmente.'), ('question_text', None)]),
      OrderedDict([('question_number', '6,"Cuando me ducho o me baño estoy atento a las sensaciones del agua en mi cuerpo.'), ('question_text', None)]),
      OrderedDict([('question_number', '7,"Con facilidad puedo poner en palabras mis creencias sentimientos y expectativas.'), ('question_text', None)]),
      OrderedDict([('question_number', '8,"No presto atención a lo que hago porque sueño despierto porque me preocupo o porque me distraigo.'), ('question_text', None)]),
      OrderedDict([('question_number', '9,"Observo mis sentimientos sin perderme en ellos.'), ('question_text', None)]),
      OrderedDict([('question_number', 10.0), ('question_text', 'Me digo a mi mismo/a que no debería sentir lo que siento.')])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
    Routine trial_ffmq
  LoopTerminator trials_ffmq
  Routine end_ffmq
  Routine Intro
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('b', 1)]),
      OrderedDict([('b', 2)]),
      OrderedDict([('b', 3)]),
      OrderedDict([('b', 4)])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Lists/Trials.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('cue', 'NC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'DC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'SC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'NC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'DC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'SC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'NC'), ('target', '--<--'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '--<--'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '--<--'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '--<--'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '-->--'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '-->--'), ('correct', 'j')])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
      Routine Fix
      Routine cue
      Routine Target
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks
  Routine End
